PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 864]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        # Prepare to capture responses
        trial_code_key_resp = event.BuilderKeyResponse()
        trial_code_key_resp.clock = core.Clock()

        # Initialize variables
        trial_code_shape = None
        trial_code_text = None
        feedback_message = ''  # Initialize feedback_message here

        # Check if there are any trials left
        if len(all_trials) > 0:
            current_shape, current_word, is_match = all_trials.pop(0)  # Get the next trial

            # Set the shape vertices for this trial
            if current_shape in shape_vertices:
                vertices = shape_vertices[current_shape]
            else:
                raise ValueError(f"Invalid shape: {current_shape}")

            # Set the text label for this trial
            label = current_word

            # Define the correct response for this trial
            if is_match:
                correct_response = 'm'  # Match trials, participant should press 'm'
            else:
                correct_response = 'n'  # Non-match trials, participant should press 'n'

            # Store the correct response and other trial data in the experiment
            thisExp.addData('correct_response', correct_response)
            thisExp.addData('trial_shape', current_shape)
            thisExp.addData('trial_label', current_word)
            thisExp.addData('is_match', is_match)

            # Create the shape stimulus for this trial
            trial_code_shape = visual.ShapeStim(win, vertices=vertices, fillColor='white', lineColor='black', pos=(0, 0))

            # Create the text stimulus for this trial
            trial_code_text = visual.TextStim(win=win, text=label, pos=(0, -0.2), color='black', height=0.05)

            # Set AutoDraw to True to display them during the trial
            trial_code_shape.setAutoDraw(True)
            trial_code_text.setAutoDraw(True)

        else:
            # No more trials, end the loop
            trials.finished = True  # 'trials' is the name of your loop in Builder
            continueRoutine = False
            return  # Exit the code component
      Each Frame:
        # Check for a key response
        theseKeys = event.getKeys(keyList=['m', 'n', 'escape'])

        if len(theseKeys) > 0:
            trial_code_key_resp.keys = theseKeys[-1]  # Just the last key pressed
            trial_code_key_resp.rt = trial_code_key_resp.clock.getTime()
            if trial_code_key_resp.keys == 'escape':
                core.quit()
            continueRoutine = False  # End the trial
      End Routine:
        # Turn off the drawing of the stimuli if they were drawn
        if trial_code_shape is not None:
            trial_code_shape.setAutoDraw(False)
        if trial_code_text is not None:
            trial_code_text.setAutoDraw(False)

        # Check participant response at the end of the trial using the Keyboard component
        if not trial_key_resp.keys:  # No response was made
            feedback_message = "Miss"
        elif trial_key_resp.keys[0] != correct_response:  # Incorrect response
            feedback_message = "Incorrect"
        else:
            feedback_message = ""  # Correct response, no feedback message

        # Store the response data
        thisExp.addData('response', trial_key_resp.keys)
        thisExp.addData('rt', trial_key_resp.rt)

        # Display feedback if there's a message to show
        if feedback_message != '':
            # Create a TextStim for feedback
            feedback_stim = visual.TextStim(win=win, text=feedback_message, pos=(0, 0), height=0.1, color='white')
            # Draw the feedback text
            feedback_stim.draw()
            win.flip()  # Update the window to show the feedback
            core.wait(1.0)  # Wait for 1 second (or desired feedback duration)
            win.flip()  # Clear the feedback from the screen
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent code_trial_text
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $label
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    KeyboardComponent trial_key_resp
      allowedKeys = "n","m"
      correctAns = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent code_trial_shape
      fillColor = white
      shape = custom polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      vertices [set every repeat] = vertices
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  Routine introduction
    RoutineSettingsComponent introduction
      saveStartStop = False
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Thank you so much for signing up for the experiment. This is a part of my thesis research.

        Press on the "space bar" to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine information
    RoutineSettingsComponent information
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        In this study, you will be shown three shapes (square, circle and  triangle) with three labels (scarcity, neutral, and abundance). You have to memorize this association.

        - Scarcity is represented by square (scarcity-square)
        - Neutral is represented by circle (neutral-circle)
        - Abundance is represented by triangle (abundance-triangle)

        Take a few minutes to memorize this association. Let me know when you have memorized and ready to proceed to the experiment.

        press 'spacebar' to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine associations
    RoutineSettingsComponent associations
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import numpy as np

        # Define possible words for each label
        scarcity_words = ["debt", "starvation", "shortage"]
        abundance_words = ["wealth", "plenty", "surplus"]
        neutral_words = ["item", "object", "standard"]

        # Define shapes and labels
        shapes = ["square", "circle", "triangle"]
        labels = ["scarcity", "abundance", "neutral"]

        # Randomly select one unique word per label for this participant
        chosen_word_dict = {
            "scarcity": random.choice(scarcity_words),
            "abundance": random.choice(abundance_words),
            "neutral": random.choice(neutral_words)
        }

        # Randomly shuffle the shapes
        random.shuffle(shapes)

        # Create unique pairs by assigning each shape a label and a unique word for this participant
        pairs = [{"shape": shape, "label": label, "word": chosen_word_dict[label]} for shape, label in zip(shapes, labels)]

        # Store the selected shapes, labels, and words
        chosen_shapes = [pair["shape"] for pair in pairs]
        chosen_labels = [pair["label"] for pair in pairs]
        chosen_words_list = [pair["word"] for pair in pairs]  # Stores the words associated with each label

        # Display selected pairs for verification (optional)
        for pair in pairs:
            print(pair)

        # Define shape vertices for drawing
        shape_vertices = {
            'square': [[-0.1, 0.1], [0.1, 0.1], [0.1, -0.1], [-0.1, -0.1]],  # Square with 4 corners
            'circle': [[0.1 * np.cos(theta), 0.1 * np.sin(theta)] for theta in np.linspace(0, 2 * np.pi, 100)],  # Circle with 100 points
            'triangle': [[-0.1, -0.1], [0.1, -0.1], [0, 0.1]]  # Triangle with 3 points
        }

        # Set the number of trials
        num_trials = 90
        num_match_trials = num_trials // 2
        num_non_match_trials = num_trials - num_match_trials

        # Generate match trials (45 trials)
        match_trials = []
        for i in range(num_match_trials):
            idx = i % len(chosen_shapes)
            match_trials.append((chosen_shapes[idx], chosen_words_list[idx], True))

        # Generate non-match trials (45 trials)
        non_match_trials = []
        while len(non_match_trials) < num_non_match_trials:
            for i in range(len(chosen_shapes)):
                wrong_idx = (i + random.randint(1, len(chosen_shapes)-1)) % len(chosen_shapes)
                if chosen_words_list[i] != chosen_words_list[wrong_idx]:
                    non_match_trials.append((chosen_shapes[i], chosen_words_list[wrong_idx], False))
                    if len(non_match_trials) >= num_non_match_trials:
                        break

        # Combine and shuffle trials
        all_trials = match_trials + non_match_trials
        random.shuffle(all_trials)
      Begin Routine:
        ## Define positions for the shapes on the screen
        shape_positions = [(-0.5, 0), (0, 0), (0.5, 0)]  # Positions for left, center, and right

        # Create the polygons dynamically
        assoc_polygon1 = visual.ShapeStim(win, vertices=shape_vertices[chosen_shapes[0]], fillColor='white', lineColor='black', pos=shape_positions[0])
        assoc_polygon2 = visual.ShapeStim(win, vertices=shape_vertices[chosen_shapes[1]], fillColor='white', lineColor='black', pos=shape_positions[1])
        assoc_polygon3 = visual.ShapeStim(win, vertices=shape_vertices[chosen_shapes[2]], fillColor='white', lineColor='black', pos=shape_positions[2])

        # Create the TextStim objects with a smaller font size using the `height` parameter
        assoc_label1 = visual.TextStim(win=win, text=chosen_words_list[0], pos=(shape_positions[0][0], shape_positions[0][1] - 0.2), color='black', height=0.05)
        assoc_label2 = visual.TextStim(win=win, text=chosen_words_list[1], pos=(shape_positions[1][0], shape_positions[1][1] - 0.2), color='black', height=0.05)
        assoc_label3 = visual.TextStim(win=win, text=chosen_words_list[2], pos=(shape_positions[2][0], shape_positions[2][1] - 0.2), color='black', height=0.05)

        # Set AutoDraw to True to show them during the routine
        assoc_polygon1.setAutoDraw(True)
        assoc_polygon2.setAutoDraw(True)
        assoc_polygon3.setAutoDraw(True)

        assoc_label1.setAutoDraw(True)
        assoc_label2.setAutoDraw(True)
        assoc_label3.setAutoDraw(True)
      End Routine:
        # Turn off the drawing of polygons and labels after the routine ends
        assoc_polygon1.setAutoDraw(False)
        assoc_polygon2.setAutoDraw(False)
        assoc_polygon3.setAutoDraw(False)

        assoc_label1.setAutoDraw(False)
        assoc_label2.setAutoDraw(False)
        assoc_label3.setAutoDraw(False)
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent trialText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine finalinstruction
    RoutineSettingsComponent finalinstruction
      saveStartStop = False
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Your task is to judge whether the shape label pairing is correct or incorrect.

        If the shape label pairing is the same as the ones you just saw then press the key "M"

        If it is shown any other way press "N"


        press 'spacebar' to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        is_match1 = int(is_match)  # is_match is now treated as a variable from the Excel file
        if not key_resp.keys:  # No response was made
            feedback_message = 'Miss'
        elif key_resp.keys == 'm' and is_match1:  # Correct match response
            feedback_message = 'Correct'
        elif key_resp.keys == 'n' and not is_match1:  # Correct not-match response
            feedback_message = 'Correct'
        else:  # Any other response is incorrect
            feedback_message = 'Incorrect'
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_message
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  Routine finalnote
    RoutineSettingsComponent finalnote
      saveStartStop = False
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    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      syncScreenRefresh = False
      text = Thank you for participating!
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Flow
  Routine introduction
  Routine information
  Routine associations
  Routine finalinstruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
  Routine finalnote
